PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'task': 'calib', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = experiment
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
  keyboardBackend = ioHub
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Routines
  Routine calib_cont
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        timeout = 10
        ave_error = 0.0
        valid_calib_points = 0
      Begin Routine:
        ave_error = calibration.last['SUMMARY']['AVE_ERROR']
        valid_calib_points = calibration.last['SUMMARY']['VALID_POINTS']

        calib_query = "Average error is: %f\n\nValid points: %d\n\nRecalibrate (y/n)?" % (ave_error, valid_calib_points)
      End Routine:
        # calib_resp Keyboard component must have set Store: all keys
        if calib_resp is not None and 'n' in calib_resp.keys:
            calib_loop.finished = True
    TextComponent calib_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine calib_instr
    TextComponent calib_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We must first calibrate the eye tracker.

        Keep your eye on the calibration do but don't anticipate it's movement.

        There will be a 9-point calibration process followed by a 5-point validation step to ensure the calibration was successful.

        Press space to continue.
    KeyboardComponent calib_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine question1
    TextComponent candidate_rating_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How fit is this candidate? (1-5)

        1 = Not qualified
        5 = Very qualified
    SliderComponent candidate_rating
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine question2
    TextComponent image_clarity_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Viewing this image was... (1-5)

        1 = Very difficult
        5 = Very easy
    SliderComponent image_clarity_rating
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine question3
    TextComponent comprehension_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How well did you comprehend the information presented? (1-5)

        1 = Little comprehension
        5 = Good comprehension
    SliderComponent comprehension_rating
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine ready_up
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will have 8 seconds to view each resume and 3 questions will be asked after each resume.

        The job posting will be presented to you before viewing each resume.

        Press the space bar to begin the experiment
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp1_stimulus
    ImageComponent image
      image [set every repeat] = $exp1_stim
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      syncScreenRefresh = False
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  Routine exp2_stimulus
    ImageComponent image_2
      image [set every repeat] = $exp2_stim
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    EyetrackerRecordComponent etRecord_2
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      syncScreenRefresh = False
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine job_posting
    ImageComponent job_description
      image = Eye Tracking Expeirement Job App.png
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent job_posting_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = timeout
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    EyetrackerCalibrationRoutine calibration
    EyetrackerValidationRoutine validation
    Routine calib_cont
  LoopTerminator calib_loop
  LoopInitiator exp1_stimulus_loop loopType="TrialHandler"
    conditionsFile = exp1_stim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('exp1_stim', './stimuli/Resume2.png')]),
      OrderedDict([('exp1_stim', './stimuli/Resume1.png')])]
    Routine ready_up
    Routine job_posting
    Routine exp1_stimulus
    Routine question1
    Routine question2
    Routine question3
  LoopTerminator exp1_stimulus_loop
  LoopInitiator exp2_stimulus_loop loopType="TrialHandler"
    conditionsFile = exp2_stim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('exp1_stim', './stimuli/Resume3.png')]),
      OrderedDict([('exp1_stim', './stimuli/Resume4.png')])]
    Routine ready_up
    Routine job_posting
    Routine exp2_stimulus
    Routine question1
    Routine question2
    Routine question3
  LoopTerminator exp2_stimulus_loop
